<PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet 
      Name="TEST Tracking and video data is read from sequence metafile." 
      Description="Test configuration file for vtkDataCollectorTest to use saved dataset. The SequenceMetafile names should be defined either from command line argument or from configuration file!" />
      
    <Device
      Id="TrackerDevice"
      Type="SavedDataSource"
      UseData="TRANSFORM"      
      AcquisitionRate="100"
      LocalTimeOffsetSec="0.0"
      ToolReferenceFrame="Tracker" 
      UseOriginalTimestamps="TRUE"
      RepeatEnabled="TRUE"
      SequenceMetafile="C:/Plus-R/Data/Recordings/PlusServerRecording_ConoProbe_OptiTrack.mha" >
      <DataSources>
        <DataSource Type="Tool" Id="RigidBody"  />
        <DataSource Type="Tool" Id="PolarisPointerTip"  />
      </DataSources>      
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="RigidBody" />
          <DataSource Id="PolarisPointerTip" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    
    <Device
      Id="MeasurerDevice"
      Type="SavedDataSource" 
      UseData="TRANSFORM"
      AcquisitionRate="100" 
      LocalTimeOffsetSec="0.0" 
      ToolReferenceFrame="Measurer"     
      UseOriginalTimestamps="TRUE"
      RepeatEnabled="TRUE"      
      SequenceMetafile="C:/Plus-R/Recordings/PlusServerRecording_ConoProbe_OptiTrack.mha" >
      <DataSources>
        <DataSource Type="Tool" Id="Measurement" />
        <DataSource Type="Tool" Id="Parameters"  />
      </DataSources>      
      <OutputChannels>
        <OutputChannel Id="MeasurerStream">
          <DataSource Id="Measurement" />
          <DataSource Id="Parameters" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    
    <Device Id="TrackedMeasurerDevice" Type="VirtualMixer">
      <InputChannels>
        <InputChannel Id="TrackerStream" />
        <InputChannel Id="MeasurerStream" />
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedMeasurerStream"/>
      </OutputChannels>
    </Device>  
    
    <Device
      Id="CaptureDevice"
      Type="VirtualDiscCapture"
      RequestedFrameRate="100">
      <InputChannels>
        <InputChannel Id="TrackedMeasurerStream" />
      </InputChannels>
    </Device>
    
  </DataCollection>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18944" 
    SendValidTransformsOnly="TRUE" 
    OutputChannelId="TrackedMeasurerStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
        <Transform Name="RigidBodyToTracker" />
        <Transform Name="PolarisPointerTipToTracker" />
        <Transform Name="MeasurementToMeasurer" />
        <Transform Name="ParametersToMeasurer" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>
  
</PlusConfiguration>